<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:q1="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:q2="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:q3="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="save_path" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>Y:\shared-paton\georg\TaskControl\Animals\123\2020-01-20_16-42-40_suppress_movements\bonsai_</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ReplaySubject">
        <Name>base_name</Name>
        <BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:FlyCapture">
          <q1:Index>0</q1:Index>
          <q1:ColorProcessing>Default</q1:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>424</cv:X>
            <cv:Y>452</cv:Y>
            <cv:Width>140</cv:Width>
            <cv:Height>149</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Sum" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="q2:ExpressionTransform">
        <q2:Expression>it &gt; 500000</q2:Expression>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>base_name</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Add">
          <Operand xsi:type="StringProperty">
            <Value>video.avi</Value>
          </Operand>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
          <PropertyMappings>
            <Property Name="FileName" />
          </PropertyMappings>
        </Builder>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>base_name</Name>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="StringProperty">
          <Value>frame_stamps.csv</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="com_port" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>COMX</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="PortName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:DigitalOutput">
          <q3:PortName>COM6</q3:PortName>
          <q3:Pin>0</q3:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:VideoWriter">
            <cv:FileName>C:\Users\Utilizador\Desktop\georg\TaskControl\Animals\123\2019-11-14_17-25-33_suppress_movements\bonsai_video.avi</cv:FileName>
            <cv:Suffix>None</cv:Suffix>
            <cv:Buffered>true</cv:Buffered>
            <cv:Overwrite>true</cv:Overwrite>
            <cv:FourCC>FMP4</cv:FourCC>
            <cv:FrameRate>150</cv:FrameRate>
            <cv:FrameSize>
              <cv:Width>0</cv:Width>
              <cv:Height>0</cv:Height>
            </cv:FrameSize>
            <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Metadata.embeddedFrameCounter,Metadata.embeddedTimeStamp,Metadata.embeddedGPIOPinState</Selector>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>Y:\shared-paton\georg\TaskControl\Animals\123\2020-01-20_16-42-40_suppress_movements\bonsai_frame_stamps.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="21" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="20" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="19" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="20" Label="Source2" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="22" Label="Source2" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source2" />
      <Edge From="21" To="22" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>