<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:osc="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:Bonsai.Harp.CF;assembly=Bonsai.Harp.CF"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:p2="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="osc:CreateUdpClient">
            <osc:Name>upd server</osc:Name>
            <osc:Port>0</osc:Port>
            <osc:RemoteHostName>127.0.0.1</osc:RemoteHostName>
            <osc:RemotePort>4001</osc:RemotePort>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>arduino_com_port</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="PortName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="force_thresh" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="DoubleProperty">
          <Value>500</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>base_name</Name>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="StringProperty">
          <Value>harp_log.bin</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Path" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>base_name</Name>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="StringProperty">
          <Value>LoadCellData.csv</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>base_name</Name>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="StringProperty">
          <Value>harp_sync.csv</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" DisplayName="LC_com_port" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:DeviceState>Active</harp:DeviceState>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:LedState>On</harp:LedState>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disable</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM7</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:LoadCellsEvent">
        <p1:Type>Forces</p1:Type>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it.getReal(0)</scr:Expression>
      </Expression>
      <Expression xsi:type="Multiply">
        <Operand xsi:type="DoubleProperty">
          <Value>-1</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>10</dsp:Count>
          <dsp:Skip>10</dsp:Skip>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Average" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>1000</dsp:Count>
          <dsp:Skip>10</dsp:Skip>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Average" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Subtract" />
      <Expression xsi:type="Multiply">
        <Operand xsi:type="DoubleProperty">
          <Value>-1</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>500</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it.getReal(1)</scr:Expression>
      </Expression>
      <Expression xsi:type="Multiply">
        <Operand xsi:type="DoubleProperty">
          <Value>1</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>10</dsp:Count>
          <dsp:Skip>10</dsp:Skip>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Average" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>1000</dsp:Count>
          <dsp:Skip>10</dsp:Skip>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Average" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Subtract" />
      <Expression xsi:type="Multiply">
        <Operand xsi:type="DoubleProperty">
          <Value>-1</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>500</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="LogicalAnd" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>COM10</ard:PortName>
          <ard:Pin>22</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Window">
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SelectMany">
          <Name>Running average</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="dsp:Buffer">
                  <dsp:Count>1000</dsp:Count>
                  <dsp:Skip xsi:nil="true" />
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="dsp:Average" />
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Val0</Selector>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it.getReal(2)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>3</dsp:Count>
          <dsp:Skip>3</dsp:Skip>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Average" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>500</dsp:Count>
          <dsp:Skip>3</dsp:Skip>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Average" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Subtract" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Abs" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>arduino_com_port</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="PortName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>arduino_com_port</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="PortName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="touch_thresh" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="DoubleProperty">
          <Value>75</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>75</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>COM10</ard:PortName>
          <ard:Pin>24</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it.getReal(3)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>3</dsp:Count>
          <dsp:Skip>3</dsp:Skip>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Average" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>500</dsp:Count>
          <dsp:Skip>3</dsp:Skip>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Average" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Subtract" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Abs" />
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>75</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>COM10</ard:PortName>
          <ard:Pin>26</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>MessageBytes</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>C:\Users\User\TaskControl\Animals\123\2022-05-17_13-12-10_interval_categorization_v2\bonsai_harp_log.bin</dsp:Path>
          <dsp:Suffix>None</dsp:Suffix>
          <dsp:Overwrite>true</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:FilterMessage">
          <harp:Address>33</harp:Address>
          <harp:MessageType>Event</harp:MessageType>
        </Combinator>
      </Expression>
      <Expression xsi:type="harp:Parse">
        <harp:Type>Timestamp</harp:Type>
        <harp:IsArray>false</harp:IsArray>
      </Expression>
      <Expression xsi:type="Multiply">
        <Operand xsi:type="DoubleProperty">
          <Value>1000</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\User\TaskControl\Animals\123\2022-05-17_13-12-10_interval_categorization_v2\bonsai_LoadCellData.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:FilterMessage">
          <harp:Address>34</harp:Address>
          <harp:MessageType>Event</harp:MessageType>
        </Combinator>
      </Expression>
      <Expression xsi:type="harp:Parse">
        <harp:Type>Timestamp</harp:Type>
        <harp:IsArray>false</harp:IsArray>
      </Expression>
      <Expression xsi:type="Multiply">
        <Operand xsi:type="DoubleProperty">
          <Value>1000</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\User\TaskControl\Animals\123\2022-05-17_13-12-10_interval_categorization_v2\bonsai_harp_sync.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Zip" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="osc:SendMessage">
          <osc:Connection>upd server</osc:Connection>
          <osc:Address>/</osc:Address>
        </Builder>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="save_path" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>C:\Users\User\TaskControl\Animals\123\2022-05-17_13-12-10_interval_categorization_v2\bonsai_</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ReplaySubject">
        <Name>base_name</Name>
        <BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:FlyCapture">
          <p2:Index>0</p2:Index>
          <p2:ColorProcessing>Default</p2:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>409</cv:X>
            <cv:Y>193</cv:Y>
            <cv:Width>23</cv:Width>
            <cv:Height>23</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Average" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>base_name</Name>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="StringProperty">
          <Value>video.avi</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>base_name</Name>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="StringProperty">
          <Value>frame_stamps.csv</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>arduino_com_port</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="PortName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>arduino_com_port</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="PortName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="reach_thresh" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="DoubleProperty">
          <Value>70</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>70</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>COM10</ard:PortName>
          <ard:Pin>28</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>404</cv:X>
            <cv:Y>257</cv:Y>
            <cv:Width>19</cv:Width>
            <cv:Height>24</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Average" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>70</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>COM10</ard:PortName>
          <ard:Pin>30</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FrameRate" DisplayName="frame_rate" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>C:\Users\User\TaskControl\Animals\123\2022-05-17_13-12-10_interval_categorization_v2\bonsai_video.avi</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>60</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Metadata.embeddedFrameCounter,Metadata.embeddedTimeStamp,Metadata.embeddedGPIOPinState</Selector>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\User\TaskControl\Animals\123\2022-05-17_13-12-10_interval_categorization_v2\bonsai_frame_stamps.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="com_port" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>COM10</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ReplaySubject">
        <Name>arduino_com_port</Name>
        <BufferSize xsi:nil="true" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="44" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="29" Label="Source2" />
      <Edge From="5" To="41" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="79" Label="Source2" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="84" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="88" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="16" To="78" Label="Source1" />
      <Edge From="16" To="80" Label="Source1" />
      <Edge From="16" To="85" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="17" To="30" Label="Source1" />
      <Edge From="17" To="47" Label="Source1" />
      <Edge From="17" To="66" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="19" To="83" Label="Source2" />
      <Edge From="19" To="23" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="26" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source2" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="42" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="31" To="83" Label="Source3" />
      <Edge From="31" To="35" Label="Source1" />
      <Edge From="31" To="45" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="38" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source2" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="41" To="42" Label="Source2" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="44" Label="Source2" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="47" To="48" Label="Source1" />
      <Edge From="47" To="51" Label="Source1" />
      <Edge From="47" To="83" Label="Source4" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="50" To="54" Label="Source1" />
      <Edge From="51" To="52" Label="Source1" />
      <Edge From="52" To="53" Label="Source1" />
      <Edge From="53" To="54" Label="Source2" />
      <Edge From="54" To="55" Label="Source1" />
      <Edge From="55" To="56" Label="Source1" />
      <Edge From="56" To="64" Label="Source2" />
      <Edge From="57" To="58" Label="Source1" />
      <Edge From="58" To="65" Label="Source2" />
      <Edge From="59" To="60" Label="Source1" />
      <Edge From="60" To="77" Label="Source2" />
      <Edge From="61" To="62" Label="Source1" />
      <Edge From="62" To="63" Label="Source1" />
      <Edge From="63" To="64" Label="Source1" />
      <Edge From="63" To="76" Label="Source1" />
      <Edge From="64" To="65" Label="Source1" />
      <Edge From="66" To="67" Label="Source1" />
      <Edge From="66" To="70" Label="Source1" />
      <Edge From="66" To="83" Label="Source5" />
      <Edge From="67" To="68" Label="Source1" />
      <Edge From="68" To="69" Label="Source1" />
      <Edge From="69" To="73" Label="Source1" />
      <Edge From="70" To="71" Label="Source1" />
      <Edge From="71" To="72" Label="Source1" />
      <Edge From="72" To="73" Label="Source2" />
      <Edge From="73" To="74" Label="Source1" />
      <Edge From="74" To="75" Label="Source1" />
      <Edge From="75" To="76" Label="Source2" />
      <Edge From="76" To="77" Label="Source1" />
      <Edge From="78" To="79" Label="Source1" />
      <Edge From="80" To="81" Label="Source1" />
      <Edge From="81" To="82" Label="Source1" />
      <Edge From="82" To="83" Label="Source1" />
      <Edge From="83" To="84" Label="Source1" />
      <Edge From="85" To="86" Label="Source1" />
      <Edge From="86" To="87" Label="Source1" />
      <Edge From="87" To="88" Label="Source2" />
      <Edge From="89" To="90" Label="Source1" />
      <Edge From="91" To="92" Label="Source1" />
      <Edge From="92" To="93" Label="Source1" />
      <Edge From="94" To="95" Label="Source1" />
      <Edge From="94" To="122" Label="Source1" />
      <Edge From="95" To="96" Label="Source1" />
      <Edge From="95" To="121" Label="Source1" />
      <Edge From="96" To="97" Label="Source1" />
      <Edge From="96" To="115" Label="Source1" />
      <Edge From="97" To="98" Label="Source1" />
      <Edge From="98" To="99" Label="Source1" />
      <Edge From="99" To="113" Label="Source1" />
      <Edge From="100" To="101" Label="Source1" />
      <Edge From="101" To="102" Label="Source1" />
      <Edge From="102" To="121" Label="Source2" />
      <Edge From="103" To="104" Label="Source1" />
      <Edge From="104" To="105" Label="Source1" />
      <Edge From="105" To="123" Label="Source1" />
      <Edge From="106" To="107" Label="Source1" />
      <Edge From="107" To="119" Label="Source2" />
      <Edge From="108" To="109" Label="Source1" />
      <Edge From="109" To="114" Label="Source2" />
      <Edge From="110" To="111" Label="Source1" />
      <Edge From="111" To="112" Label="Source1" />
      <Edge From="112" To="118" Label="Source2" />
      <Edge From="112" To="113" Label="Source2" />
      <Edge From="113" To="114" Label="Source1" />
      <Edge From="115" To="116" Label="Source1" />
      <Edge From="116" To="117" Label="Source1" />
      <Edge From="117" To="118" Label="Source1" />
      <Edge From="118" To="119" Label="Source1" />
      <Edge From="120" To="121" Label="Source3" />
      <Edge From="122" To="123" Label="Source2" />
      <Edge From="124" To="125" Label="Source1" />
      <Edge From="125" To="126" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>