<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="save_path" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>C:\Users\User\TaskControl\Animals\123\2023-01-05_15-29-41_learn_IRI\bonsai_</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ReplaySubject">
        <Name>base_name</Name>
        <BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:FlyCapture">
          <p1:Index>0</p1:Index>
          <p1:ColorProcessing>Default</p1:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>318</cv:X>
            <cv:Y>332</cv:Y>
            <cv:Width>28</cv:Width>
            <cv:Height>36</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Average" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>base_name</Name>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="StringProperty">
          <Value>video.avi</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>base_name</Name>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="StringProperty">
          <Value>frame_stamps.csv</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>arduino_com_port</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="PortName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="lick_thresh" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="DoubleProperty">
          <Value>60</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>60</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FrameRate" DisplayName="frame_rate" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="pin" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>23</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Pin" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>COM10</ard:PortName>
          <ard:Pin>23</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>C:\Users\User\TaskControl\Animals\123\2023-01-05_15-29-41_learn_IRI\bonsai_video.avi</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>60</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Metadata.embeddedFrameCounter,Metadata.embeddedTimeStamp,Metadata.embeddedGPIOPinState</Selector>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\User\TaskControl\Animals\123\2023-01-05_15-29-41_learn_IRI\bonsai_frame_stamps.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="com_port" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>COM10</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ReplaySubject">
        <Name>arduino_com_port</Name>
        <BufferSize xsi:nil="true" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="27" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="26" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="20" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="26" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="28" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="25" Label="Source2" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source2" />
      <Edge From="20" To="25" Label="Source1" />
      <Edge From="21" To="26" Label="Source3" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source3" />
      <Edge From="27" To="28" Label="Source2" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>