<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="save_path" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>C:\Users\User\TaskControl\Animals\123\2021-02-16_12-04-38_learn_to_reach\bonsai_</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ReplaySubject">
        <Name>base_name</Name>
        <BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:FlyCapture">
          <p1:Index>0</p1:Index>
          <p1:ColorProcessing>Default</p1:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>399</cv:X>
            <cv:Y>361</cv:Y>
            <cv:Width>7</cv:Width>
            <cv:Height>10</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Average" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it &gt; 80</scr:Expression>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>base_name</Name>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="StringProperty">
          <Value>video.avi</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>base_name</Name>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="StringProperty">
          <Value>frame_stamps.csv</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="com_port" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>COM3</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="PortName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>COM3</ard:PortName>
          <ard:Pin>53</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>195</cv:X>
            <cv:Y>368</cv:Y>
            <cv:Width>8</cv:Width>
            <cv:Height>10</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Average" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Buffer">
                <rx:Count>1000</rx:Count>
                <rx:Skip xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Average" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Subtract" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="3" To="6" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>C:\Users\User\TaskControl\Animals\123\2021-02-16_12-04-38_learn_to_reach\bonsai_video.avi</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>true</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>200</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Metadata.embeddedFrameCounter,Metadata.embeddedTimeStamp,Metadata.embeddedGPIOPinState</Selector>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\User\TaskControl\Animals\123\2021-02-16_12-04-38_learn_to_reach\bonsai_frame_stamps.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:GpioPinState" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="PortName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it &gt; 80</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:PortName>COM3</ard:PortName>
          <ard:Pin>52</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\test1.bonsai" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="24" Label="Source1" />
      <Edge From="3" To="26" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="23" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="5" To="20" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="19" Label="Source2" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="23" Label="Source2" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="25" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="17" To="28" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="24" To="25" Label="Source2" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="28" To="31" Label="Source2" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>